'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public Measure

Units BattV=Volts
Units PTemp_C=Deg C
Units Measure=ft

'Define Data Tables
DataTable(Table2,True,-1)
	DataInterval(0,1440,Min,10)
	Minimum(1,BattV,FP2,False,False)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(5,Sec,1,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic 4-20 mA (2-wire with internal shunt and datalogger power) measurement 'Measure'
		CurrentSE(Measure,1,mV1000,RG1,True,0,60,2.15625,-8.125)
		'Call Data Tables and Store Data
		CallTable Table2
	NextScan
EndProg
